CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:DNA
    Name the output image:RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
Resize:[module_num:6|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
    Select the input image:RescaleIntensity
    Name the output image:Resize
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.25
    Y Resizing factor:0.25
    Z Resizing factor:0.25
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:Resize
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):100,400
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
FillObjects:[module_num:8|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
    Select the input object:IdentifyPrimaryObjects
    Name the output object:FillObjects
    Minimum hole size:64.0
    Planewise fill:No
    Filling method:Holes

MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:FillObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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
OverlayObjects:[module_num:11|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
    Input:Resize
    Name the output image:OverlayObjects
    Objects:FillObjects
    Opacity:0.5

SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:OverlayObjects
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
