CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:DNA
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
Threshold:[module_num:6|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enabled:False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
    Select the input image:OrigRed
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
ReduceNoise:[module_num:7|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enabled:False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
    Select the input image:OrigGreen
    Name the output image:ReduceNoise
    Size:7
    Distance:11
    Cut-off distance:0.1

EnhanceEdges:[module_num:8|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enabled:False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
    Select the input image:ReduceNoise
    Name the output image:EdgedImage
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    Select an edge-finding method:Kirsch
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
CorrectIlluminationCalculate:[module_num:9|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
    Select the input image:OrigGreen
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:No smoothing
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:10|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enabled:False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
    Select the input image:OrigGreen
    Name the output image:CorrBlue
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:OrigGreen
    Name the primary objects to be identified:PrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):200,1500
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:.7
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:12|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enabled:False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
    Select object sets to measure:PrimaryObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:13|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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
OverlayObjects:[module_num:14|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enabled:False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
    Input:DNA
    Name the output image:OverlayObjects
    Objects:PrimaryObjects
    Opacity:0.3

SaveImages:[module_num:15|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OverlayObjects
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
